PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = mYousefi
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine PractPhase
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    PolygonComponent back8
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent Press_Space
      image = instruct_1.PNG
      size = (1, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent Resp4Space
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 10.0
      store = nothing
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  Routine taskT1
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    PolygonComponent back3
      fillColor = black
      lineColor = black
      saveStartStop = False
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $duration
      units = norm
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    ImageComponent Other_Text
      image [set every repeat] = otherListentingTo.jpg
      pos = (0, 0.35)
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $duration
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    ImageComponent Pic
      image [set every repeat] = $image
      saveStartStop = False
      size = (1,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $duration
      units = norm
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    SoundComponent Vc
      saveStartStop = False
      sound [set every repeat] = $vc
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $duration
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  Routine Response
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    PolygonComponent back6
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = norm
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    ImageComponent Quest
      image [set every repeat] = $soq
      size = (0.85, 0.85)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    SliderComponent RatingResp
      forceEndRoutine = True
      granularity = 1
      labels = -10 ,0 , +10
      letterHeight = 0.04
      pos = (0, -0.3)
      size = (1.65, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      styles = rating
      ticks = (-10,-9,-8,-7,-6,-5,-4,-3,-2,-1,0,1, 2, 3, 4, 5,6,7,8,9,10)
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    CodeComponent code_mouse_Visible
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = True
      End Routine:
        win.mouseVisible = False
  Routine Fc
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    PolygonComponent back2
      fillColor = black
      lineColor = black
      saveStartStop = False
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      units = norm
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    PolygonComponent FixCross
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine instruction
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    PolygonComponent background
      fillColor = black
      lineColor = black
      saveStartStop = False
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent Press_Space_2
      image = pressSpace.jpg
      size = (0.7, 0.6)
      startVal [time (s)] = 0.0
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    KeyboardComponent Resp1Space
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine BreakRoutine
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    PolygonComponent back5
      fillColor = black
      lineColor = black
      saveStartStop = False
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent Press_Break
      image = pressSpace.jpg
      size = (0.75, 0.75)
      startVal [time (s)] = 0.0
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    KeyboardComponent Resp2Space
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine block2
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    PolygonComponent back4
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = norm
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    TextComponent SelfQ
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = How Pleasant was the sound for You?
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    SliderComponent RatingRespS
      forceEndRoutine = True
      granularity = 1
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.6, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      styles = rating
      ticks = (-10,-9,-8,-7,-6,-5,-4,-3,-2,-1,0,1, 2, 3, 4, 5,6,7,8,9,10)
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  Routine Finish
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    PolygonComponent back7
      fillColor = black
      lineColor = black
      saveStartStop = False
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent Thank_You
      image = appreciaition.jpg
      size = (1, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent Resp3Space
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine PractPhase
  LoopInitiator PractTrial loopType="TrialHandler"
    conditionsFile = practice.xlsx
    isTrials = False
    loopType = fullRandom
    nReps = 1
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    conditions:
      [{'vc': 'dog.WAV', 'image': 'wave_image.JPG', 'duration': 4, 'soq': 'SelfQ.JPG'},
      {'vc': 'cat.WAV', 'image': 'wave_image.JPG', 'duration': 4, 'soq': 'SelfQ.JPG'},
      {'vc': 'alarm.WAV', 'image': 'cat_image.JPG', 'duration': 4, 'soq': 'SelfQ.JPG'},
      {'vc': 'wave.WAV', 'image': 'cat_image.JPG', 'duration': 4, 'soq': 'OtherQ.JPG'},
      {'vc': 'wave.WAV', 'image': 'alarm_image.JPG', 'duration': 4, 'soq': 'OtherQ.JPG'},
      {'vc': 'cat.WAV', 'image': 'dog_image.JPG', 'duration': 4, 'soq': 'OtherQ.JPG'},
      {'vc': 'alarm.WAV', 'image': 'dog_image.JPG', 'duration': 4, 'soq': 'OtherQ.JPG'}]
    Routine taskT1
    Routine Response
    Routine Fc
  LoopTerminator PractTrial
  Routine instruction
  Routine Fc
  LoopInitiator Tr1 loopType="TrialHandler"
    conditionsFile = before.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'vc': 'attack_audio', 'image': 'applause_image', 'duration': 3, 'congruency': 1, 'soq': 'SelfQ.JPG', 'mode': 'self', 'BA': 'beforeBreak', 'codeExplan': 1, 'explanation': 'unpleasant incongruent self'},
      {'vc': 'dentist_audio', 'image': 'party_image', 'duration': 3, 'congruency': 1, 'soq': 'SelfQ.JPG', 'mode': 'self', 'BA': 'beforeBreak', 'codeExplan': 1, 'explanation': 'unpleasant incongruent self'},
      {'vc': 'bees_audio', 'image': 'baby_image', 'duration': 3, 'congruency': 1, 'soq': 'SelfQ.JPG', 'mode': 'self', 'BA': 'beforeBreak', 'codeExplan': 1, 'explanation': 'unpleasant incongruent self'},
      {'vc': 'babiescry_audio', 'image': 'seagul_image', 'duration': 3, 'congruency': 1, 'soq': 'SelfQ.JPG', 'mode': 'self', 'BA': 'beforeBreak', 'codeExplan': 1, 'explanation': 'unpleasant incongruent self'},
      {'vc': 'party_audio', 'image': 'applause_image', 'duration': 3, 'congruency': 2, 'soq': 'SelfQ.JPG', 'mode': 'self', 'BA': 'beforeBreak', 'codeExplan': 2, 'explanation': 'pleasant congruent self'},
      {'vc': 'applause_audio', 'image': 'party_image', 'duration': 3, 'congruency': 2, 'soq': 'SelfQ.JPG', 'mode': 'self', 'BA': 'beforeBreak', 'codeExplan': 2, 'explanation': 'pleasant congruent self'},
      {'vc': 'seagulls_audio', 'image': 'baby_image', 'duration': 3, 'congruency': 2, 'soq': 'SelfQ.JPG', 'mode': 'self', 'BA': 'beforeBreak', 'codeExplan': 2, 'explanation': 'pleasant congruent self'}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
    Routine taskT1
    Routine Response
    Routine Fc
  LoopTerminator Tr1
  Routine BreakRoutine
  Routine Fc
  LoopInitiator Tr2 loopType="TrialHandler"
    conditionsFile = after.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'vc': 'attack_audio', 'image': 'applause_image', 'duration': 3, 'congruency': 1, 'soq': 'SelfQ.JPG', 'mode': 'self', 'BA': 'afterBreak', 'CodeExplan': 1, 'explanation': 'unpleasant incongruent self'},
      {'vc': 'dentist_audio', 'image': 'party_image', 'duration': 3, 'congruency': 1, 'soq': 'SelfQ.JPG', 'mode': 'self', 'BA': 'afterBreak', 'CodeExplan': 1, 'explanation': 'unpleasant incongruent self'},
      {'vc': 'bees_audio', 'image': 'baby_image', 'duration': 3, 'congruency': 1, 'soq': 'SelfQ.JPG', 'mode': 'self', 'BA': 'afterBreak', 'CodeExplan': 1, 'explanation': 'unpleasant incongruent self'},
      {'vc': 'babiescry_audio', 'image': 'seagul_image', 'duration': 3, 'congruency': 1, 'soq': 'SelfQ.JPG', 'mode': 'self', 'BA': 'afterBreak', 'CodeExplan': 1, 'explanation': 'unpleasant incongruent self'},
      {'vc': 'party_audio', 'image': 'applause_image', 'duration': 3, 'congruency': 2, 'soq': 'SelfQ.JPG', 'mode': 'self', 'BA': 'afterBreak', 'CodeExplan': 2, 'explanation': 'pleasant congruent self'},
      {'vc': 'applause_audio', 'image': 'party_image', 'duration': 3, 'congruency': 2, 'soq': 'SelfQ.JPG', 'mode': 'self', 'BA': 'afterBreak', 'CodeExplan': 2, 'explanation': 'pleasant congruent self'},
      {'vc': 'seagulls_audio', 'image': 'baby_image', 'duration': 3, 'congruency': 2, 'soq': 'SelfQ.JPG', 'mode': 'self', 'BA': 'afterBreak', 'CodeExplan': 2, 'explanation': 'pleasant congruent self'}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
    Routine taskT1
    Routine Response
    Routine Fc
  LoopTerminator Tr2
  Routine Finish
